---
API: 2.1
OpenSesame: 3.2.4
Platform: nt
---
set width 1366
set uniform_coordinates no
set title "Color-word Stroop"
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Usuario\\Documents\\JoseLuis\\UTalca_2018\\PIA_2019\\exp_paradigms\\emotional_Stroop_OpenSes"
set disable_garbage_collection yes
set description "Default description"
set coordinates relative
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background black

define sketchpad Blank1000
	set reset_variables no
	set duration 1000
	set description "Displays stimuli"

define sketchpad End_of_practice
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Ahora comienza el experimento de verdad" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Tendrás 5 pausas para descansar" x=0 y=64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Presiona la tecla espacio para continuar" x=0 y=224 z_index=0

define sketchpad End_of_practice_1
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Este es el final de la práctica" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Presiona la tecla espacio para continuar" x=0 y=224 z_index=0

define sequence Exp_Trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Blank1000 always
	run Fixation200 always
	run Target1500 always
	run keyboard_response always
	run logger always
	run new_inline_script always
	run new_feedback "[show_feedback] = 1"

define loop Experiment_block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set item Exp_Trial_sequence
	set description "Repeatedly runs another item"
	set cycles 225
	set continuous no
	set column_order "color;word;congruity;weight;correct_response;Sz"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Sz 32
	setcycle 0 trialNb 1
	setcycle 0 word sufrimiento
	setcycle 0 emotion negativa
	setcycle 0 weight 1
	setcycle 0 color yellow
	setcycle 0 correct_response n
	setcycle 1 Sz 32
	setcycle 1 trialNb 2
	setcycle 1 word "acosado(a)"
	setcycle 1 emotion negativa
	setcycle 1 weight 1
	setcycle 1 color yellow
	setcycle 1 correct_response n
	setcycle 2 Sz 32
	setcycle 2 trialNb 3
	setcycle 2 word "despreciado(a)"
	setcycle 2 emotion negativa
	setcycle 2 weight 1
	setcycle 2 color yellow
	setcycle 2 correct_response n
	setcycle 3 Sz 32
	setcycle 3 trialNb 4
	setcycle 3 word "amenazado(a)"
	setcycle 3 emotion negativa
	setcycle 3 weight 1
	setcycle 3 color yellow
	setcycle 3 correct_response n
	setcycle 4 Sz 32
	setcycle 4 trialNb 5
	setcycle 4 word cruel
	setcycle 4 emotion negativa
	setcycle 4 weight 1
	setcycle 4 color yellow
	setcycle 4 correct_response n
	setcycle 5 Sz 32
	setcycle 5 trialNb 6
	setcycle 5 word "agresivo(a)"
	setcycle 5 emotion negativa
	setcycle 5 weight 1
	setcycle 5 color yellow
	setcycle 5 correct_response n
	setcycle 6 Sz 32
	setcycle 6 trialNb 7
	setcycle 6 word inútil
	setcycle 6 emotion negativa
	setcycle 6 weight 1
	setcycle 6 color yellow
	setcycle 6 correct_response n
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	setcycle 25 Sz 32
	setcycle 25 trialNb 26
	setcycle 25 word sufrimiento
	setcycle 25 emotion negativa
	setcycle 25 weight 1
	setcycle 25 color green
	setcycle 25 correct_response b
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	setcycle 50 Sz 32
	setcycle 50 trialNb 51
	setcycle 50 word sufrimiento
	setcycle 50 emotion negativa
	setcycle 50 weight 1
	setcycle 50 color red
	setcycle 50 correct_response v
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	setcycle 75 Sz 32
	setcycle 75 trialNb 76
	setcycle 75 word cerámica
	setcycle 75 emotion neutra
	setcycle 75 weight 1
	setcycle 75 color yellow
	setcycle 75 correct_response n
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	setcycle 100 Sz 32
	setcycle 100 trialNb 101
	setcycle 100 word cerámica
	setcycle 100 emotion neutra
	setcycle 100 weight 1
	setcycle 100 color green
	setcycle 100 correct_response b
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	setcycle 125 Sz 32
	setcycle 125 trialNb 126
	setcycle 125 word cerámica
	setcycle 125 emotion neutra
	setcycle 125 weight 1
	setcycle 125 color red
	setcycle 125 correct_response v
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	setcycle 150 Sz 32
	setcycle 150 trialNb 151
	setcycle 150 word "amado(a)"
	setcycle 150 emotion positiva
	setcycle 150 weight 1
	setcycle 150 color yellow
	setcycle 150 correct_response n
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	setcycle 175 Sz 32
	setcycle 175 trialNb 176
	setcycle 175 word "amado(a)"
	setcycle 175 emotion positiva
	setcycle 175 weight 1
	setcycle 175 color green
	setcycle 175 correct_response b
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	setcycle 200 Sz 32
	setcycle 200 trialNb 201
	setcycle 200 word "amado(a)"
	setcycle 200 emotion positiva
	setcycle 200 weight 1
	setcycle 200 color red
	setcycle 200 correct_response v
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	run Exp_Trial_sequence

define sketchpad Fixation200
	set reset_variables no
	set duration 200
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad Goodbye
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Gracias por tu participación!" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Deja que el/la experimentador/a se haga cargo del computador" x=-14 y=96 z_index=0

define sketchpad Instructions
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=29 html=yes show_if=always text="INSTRUCCIONES<br />" x=0 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="En los siguientes ensayos verás una palabra o una cadena de letras." x=0 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="Debes decidir en qué color esta impresa<br />la palabra, y presionar los botones con el color correspondiente<br /><br />Por ejemplo: en respuesta a la palabra" x=0 y=-128 z_index=0
	draw textline center=1 color="#ffff7f" font_bold=no font_family=serif font_italic=no font_size=65 html=yes show_if=always text=Púrpura x=0 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=26 html=yes show_if=always text="Deberías apretar el botón amarillo" x=0 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=26 html=yes show_if=always text="Sé tan rápido y acertado como puedas" x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=26 html=yes show_if=always text="Presiona la tecla espacio para empezar con una pequeña práctica" x=0 y=256 z_index=0

define loop Main_experiment_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set item Main_experiment_sequence
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order Practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 Practice No
	run Main_experiment_sequence

define sequence Main_experiment_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Experiment_block_loop always

define loop Main_practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set item Main_practice_sequence
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order Practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 Practice yes
	run Main_practice_sequence

define sequence Main_practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions always
	run reset_feedback always
	run Practice_block_loop always
	run End_of_practice_1 always
	run feedback always
	run End_of_practice always

define loop Practice_block_loop
	set source_file ""
	set source table
	set repeat 0.4
	set order random
	set item Trial_sequence
	set description "Repeatedly runs another item"
	set cycles 18
	set continuous no
	set column_order "color;word;congruity;weight;correct_response;Sz"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Sz 24
	setcycle 0 word amarillo
	setcycle 0 weight 2
	setcycle 0 color yellow
	setcycle 0 correct_response n
	setcycle 0 congruity C
	setcycle 1 Sz 32
	setcycle 1 word amarillo
	setcycle 1 weight 2
	setcycle 1 color yellow
	setcycle 1 correct_response n
	setcycle 1 congruity C
	setcycle 2 Sz 44
	setcycle 2 word verde
	setcycle 2 weight 1
	setcycle 2 color yellow
	setcycle 2 correct_response n
	setcycle 2 congruity IC
	setcycle 3 Sz 12
	setcycle 3 word rojo
	setcycle 3 weight 1
	setcycle 3 color yellow
	setcycle 3 correct_response n
	setcycle 3 congruity IC
	setcycle 4 Sz 34
	setcycle 4 word xxx
	setcycle 4 weight 2
	setcycle 4 color yellow
	setcycle 4 correct_response n
	setcycle 4 congruity N
	setcycle 5 Sz 70
	setcycle 5 word xxx
	setcycle 5 weight 2
	setcycle 5 color yellow
	setcycle 5 correct_response n
	setcycle 5 congruity N
	setcycle 6 Sz 33
	setcycle 6 word amarillo
	setcycle 6 weight 1
	setcycle 6 color green
	setcycle 6 correct_response b
	setcycle 6 congruity IC
	setcycle 7 Sz 24
	setcycle 7 word verde
	setcycle 7 weight 2
	setcycle 7 color green
	setcycle 7 correct_response b
	setcycle 7 congruity C
	setcycle 8 Sz 32
	setcycle 8 word verde
	setcycle 8 weight 2
	setcycle 8 color green
	setcycle 8 correct_response b
	setcycle 8 congruity C
	setcycle 9 Sz 44
	setcycle 9 word rojo
	setcycle 9 weight 1
	setcycle 9 color green
	setcycle 9 correct_response b
	setcycle 9 congruity IC
	setcycle 10 Sz 12
	setcycle 10 word xxx
	setcycle 10 weight 2
	setcycle 10 color green
	setcycle 10 correct_response b
	setcycle 10 congruity N
	setcycle 11 Sz 34
	setcycle 11 word xxx
	setcycle 11 weight 2
	setcycle 11 color green
	setcycle 11 correct_response b
	setcycle 11 congruity N
	setcycle 12 Sz 70
	setcycle 12 word amarillo
	setcycle 12 weight 1
	setcycle 12 color red
	setcycle 12 correct_response v
	setcycle 12 congruity IC
	setcycle 13 Sz 33
	setcycle 13 word verde
	setcycle 13 weight 1
	setcycle 13 color red
	setcycle 13 correct_response v
	setcycle 13 congruity IC
	setcycle 14 Sz 24
	setcycle 14 word rojo
	setcycle 14 weight 2
	setcycle 14 color red
	setcycle 14 correct_response v
	setcycle 14 congruity C
	setcycle 15 Sz 32
	setcycle 15 word rojo
	setcycle 15 weight 2
	setcycle 15 color red
	setcycle 15 correct_response v
	setcycle 15 congruity C
	setcycle 16 Sz 44
	setcycle 16 word xxx
	setcycle 16 weight 2
	setcycle 16 color red
	setcycle 16 correct_response v
	setcycle 16 congruity N
	setcycle 17 Sz 12
	setcycle 17 word xxx
	setcycle 17 weight 2
	setcycle 17 color red
	setcycle 17 correct_response v
	setcycle 17 congruity N
	run Trial_sequence

define sketchpad Target1500
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="[color]" font_bold=no font_family=serif font_italic=no font_size=65 html=yes show_if=always text="[word]" x=0 y=0 z_index=0

define sequence Trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Blank1000 always
	run Fixation200 always
	run Target1500 always
	run keyboard_response always
	run logger always

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome always
	run Main_practice_loop always
	run Main_experiment_loop always
	run Goodbye always

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Tu tiempo de respuesta promedio fue [avg_rt] ms" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Tu tasa de respuestas correctas fue  [acc]%" x=0 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Presiona la tecla espacio para continuar" x=0 y=224 z_index=0

define keyboard_response keyboard_response
	set timeout 5000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "v;b;n"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Puedes hacer una pausa aquí" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Presiona la tecla espacio para continuar" x=0 y=224 z_index=0

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	block_length = 45
	if (self.get('count_Exp_Trial_sequence')+1) % block_length == 0:
		exp.set('show_feedback', 1)
	else:
		exp.set('show_feedback', 0)
	__end__
	set _prepare ""

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Hola! Bienvenido a este experimento." x=0 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="De antemano te agradecemos por tu participación." x=0 y=-160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="Por favor:" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="- Concéntrate para que podamos obtener buenos resultados." x=0 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="- Apaga o deja en silencio tu teléfono." x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="- Avísale al experimentador si usas anteojos." x=0 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="- Avísale al experimentador si tomas algún medicamento." x=32 y=160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Presiona la tecla espacio para continuar" x=0 y=256 z_index=0

